---
API: 2.1
OpenSesame: 3.2.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Face Processing"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/matt/wd/opensesame-workshop/presentation-experiments"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define sketchpad BlankRequestRating
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="z = unseen ................. m = seen" x=0 y=0 z_index=0

define sketchpad PressEnterToContinue
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=23 html=yes show_if=always text="Press ENTER to continue" x=0 y=0 z_index=0

define keyboard_response WaitForEnter
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "return;enter"

define keyboard_response collectDistractorResponse
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "m ; z"

define keyboard_response collectRating
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9"

define form_consent consent_form
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Consent form</span>"
	__form_text__
	You are about to participate in an experiment.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define sketchpad distractor_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=27 html=yes show_if=always text="Thank you for completing the first part of the experiment. <br /><br />You will now be presented with a series of maths equations. <br />Please press 'm' if the equation is correct <br />or 'z' if the equation is incorrect. <br /><br />Press ENTER to continue." x=0 y=0 z_index=0

define loop distractor_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response m
	setcycle 0 mathstest "88=1.png"
	setcycle 1 correct_response m
	setcycle 1 mathstest "5x8=40.png"
	setcycle 2 correct_response z
	setcycle 2 mathstest "49+3+9=61.png"
	setcycle 3 correct_response z
	setcycle 3 mathstest "90+20+3=121.png"
	run distractor_trial

define sequence distractor_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run distractor_instructions always
	run WaitForEnter always
	run distractor_loop always

define sequence distractor_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run showDistractorStimulus always
	run collectDistractorResponse always
	run showBlank always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run notes_to_self always
	run consent_form always
	run hide_cursor always
	run sayHello always
	run WaitForEnter always
	run learning_sequence always
	run PressEnterToContinue always
	run WaitForEnter always
	run distractor_sequence always
	run PressEnterToContinue always
	run WaitForEnter always
	run test_sequence always
	run logData always
	run sayGoodbye always

define inline_script hide_cursor
	set description "Executes Python code"
	___run__
	my_mouse = mouse()
	my_mouse.show_cursor(show=False)
	__end__
	set _prepare ""

define keyboard_response isFaceSeenOrUnseen
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "m;z"

define sketchpad learning_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=27 html=yes show_if=always text="You will now be presented with a series of faces. <br /><br />Please rate the attractiveness of these faces. <br />Press '9' if the face is attractive and <br />'1' if the face is unattractive. <br />You may use any other number in between. <br /><br />Press ENTER to continue" x=0 y=0 z_index=0

define loop learning_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ConditionLearn 1
	setcycle 0 Gender female
	setcycle 0 Orientation Inverted
	setcycle 0 face "inv_01.bmp"
	setcycle 1 ConditionLearn 1
	setcycle 1 Gender female
	setcycle 1 Orientation Inverted
	setcycle 1 face "inv_02.bmp"
	setcycle 2 ConditionLearn 1
	setcycle 2 Gender male
	setcycle 2 Orientation Inverted
	setcycle 2 face "inv_81.bmp"
	setcycle 3 ConditionLearn 1
	setcycle 3 Gender male
	setcycle 3 Orientation Inverted
	setcycle 3 face "inv_82.bmp"
	setcycle 4 ConditionLearn 2
	setcycle 4 Gender female
	setcycle 4 Orientation Upright
	setcycle 4 face "upr_03.bmp"
	setcycle 5 ConditionLearn 2
	setcycle 5 Gender female
	setcycle 5 Orientation Upright
	setcycle 5 face "upr_04.bmp"
	setcycle 6 ConditionLearn 2
	setcycle 6 Gender male
	setcycle 6 Orientation Upright
	setcycle 6 face "upr_83.bmp"
	setcycle 7 ConditionLearn 2
	setcycle 7 Gender male
	setcycle 7 Orientation Upright
	setcycle 7 face "upr_84.bmp"
	run learning_trial

define sequence learning_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run learning_instructions always
	run WaitForEnter always
	run learning_loop always

define sequence learning_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run showMask always
	run showFace always
	run collectRating always
	run showMaskImmediatelyAfterRating always

define logger logData
	set description "Logs experimental data"
	set auto_log yes

define notepad notes_to_self
	__note__
	Stuff you write here doesn't get displayed during the experiment.
	
	It is a good place to write notes for colleagues or students to whom you are sending an experiment for them to run, for example.
	
	While you are still writing an experiment, it is a good place to write todo's etc
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad sayGoodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Thank you for completing <br />the experiment" x=0 y=0 z_index=0

define sketchpad sayHello
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Welcome to the face recognition part of the experiment. <br /><br />Press ENTER to continue" x=0 y=0 z_index=0

define sketchpad showBlank
	set duration 0
	set description "Displays stimuli"

define sketchpad showDistractorStimulus
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[mathstest]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad showFace
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[face]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad showFaceAtTest
	set duration 600
	set description "Displays stimuli"
	draw image center=1 file="[facetest]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad showMask
	set duration 1150
	set description "Displays stimuli"
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=-96 y=96 z_index=0
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=128 y=96 z_index=0
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=128 y=-128 z_index=0
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=-96 y=-128 z_index=0

define sketchpad showMaskImmediatelyAfterRating
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=-96 y=96 z_index=0
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=128 y=96 z_index=0
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=128 y=-128 z_index=0
	draw image center=1 file="mask.jpg" scale=1 show_if=always x=-96 y=-128 z_index=0

define sketchpad test_instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=27 html=yes show_if=always text="This is the final part of the experiment. <br /><br />You will be presented with a series of faces. <br />Some of which you have seen before, <br />some of which you have not. <br />If you recognise a face, please press 'm'. <br />If you do not recognise a face, please press 'z' <br /><br />Press ENTER to continue" x=0 y=0 z_index=0

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition 1
	setcycle 0 gender female
	setcycle 0 Orientation Inverted
	setcycle 0 facetest "inv_01.bmp"
	setcycle 0 correct_response m
	setcycle 1 condition 1
	setcycle 1 gender female
	setcycle 1 Orientation Inverted
	setcycle 1 facetest "inv_02.bmp"
	setcycle 1 correct_response m
	setcycle 2 condition 1
	setcycle 2 gender male
	setcycle 2 Orientation Inverted
	setcycle 2 facetest "inv_81.bmp"
	setcycle 2 correct_response m
	setcycle 3 condition 1
	setcycle 3 gender male
	setcycle 3 Orientation Inverted
	setcycle 3 facetest "inv_82.bmp"
	setcycle 3 correct_response m
	setcycle 4 condition 2
	setcycle 4 gender female
	setcycle 4 Orientation Upright
	setcycle 4 facetest "upr_03.bmp"
	setcycle 4 correct_response m
	setcycle 5 condition 2
	setcycle 5 gender female
	setcycle 5 Orientation Upright
	setcycle 5 facetest "upr_04.bmp"
	setcycle 5 correct_response m
	setcycle 6 condition 2
	setcycle 6 gender male
	setcycle 6 Orientation Upright
	setcycle 6 facetest "upr_83.bmp"
	setcycle 6 correct_response m
	setcycle 7 condition 2
	setcycle 7 gender male
	setcycle 7 Orientation Upright
	setcycle 7 facetest "upr_84.bmp"
	setcycle 7 correct_response m
	setcycle 8 condition 1
	setcycle 8 gender female
	setcycle 8 Orientation Inverted
	setcycle 8 facetest "inv_05.bmp"
	setcycle 8 correct_response z
	setcycle 9 condition 1
	setcycle 9 gender female
	setcycle 9 Orientation Inverted
	setcycle 9 facetest "inv_06.bmp"
	setcycle 9 correct_response z
	setcycle 10 condition 1
	setcycle 10 gender male
	setcycle 10 Orientation Inverted
	setcycle 10 facetest "inv_85.bmp"
	setcycle 10 correct_response z
	setcycle 11 condition 1
	setcycle 11 gender male
	setcycle 11 Orientation Inverted
	setcycle 11 facetest "inv_86.bmp"
	setcycle 11 correct_response z
	setcycle 12 condition 2
	setcycle 12 gender female
	setcycle 12 Orientation Upright
	setcycle 12 facetest "upr_05.bmp"
	setcycle 12 correct_response z
	setcycle 13 condition 2
	setcycle 13 gender female
	setcycle 13 Orientation Upright
	setcycle 13 facetest "upr_06.bmp"
	setcycle 13 correct_response z
	setcycle 14 condition 2
	setcycle 14 gender male
	setcycle 14 Orientation Upright
	setcycle 14 facetest "upr_85.bmp"
	setcycle 14 correct_response z
	setcycle 15 condition 2
	setcycle 15 gender male
	setcycle 15 Orientation Upright
	setcycle 15 facetest "upr_86.bmp"
	setcycle 15 correct_response z
	run test_trial

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run test_instructions always
	run WaitForEnter always
	run test_loop always

define sequence test_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run showMask always
	run showFaceAtTest always
	run BlankRequestRating always
	run isFaceSeenOrUnseen always

