---
API: 2.1
Description: A simple word/ nonword categorization
OpenSesame: 3.2.8
Platform: nt
Title: Lexical-decision task
---
set width 1024
set uniform_coordinates no
set title "Lexical decision"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/matt/Desktop/gits/opensesame_examples"
set disable_garbage_collection yes
set description "A simple lexical-decision example experiment"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background gray

define notepad about_this_example
	__note__
	In a lexical-decision experiment, the task is to categorize letter strings on
	some feature, such as whether they form a word (e.g. 'apple') or not
	(e.g. 'ipple'). Usually, the goal of a lexical-decision experiment is to analyze
	the response times to words as a function of another variable, that is, not the
	variable that participants base their response on.
	
	This version records eye movements, and will record pupil dilation eventually.
	pupil_size = eyetracker.pupil_size()
	pupil_size_vector.append(pupil_size)
	# Handle the pupilometry
	if not pupil_size_vector == []:
		var.z_response_20_min_pupil_size = min(pupil_size_vector)
		var.z_response_22_max_pupil_size = max(pupil_size_vector)
		var.z_response_21_mean_pupil_size = numpy.mean(pupil_size_vector)
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad correct_indicator
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=green penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=green penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define inline_script counterbalance
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.subject_parity == 'odd':
		var.word_response = 'z'
		var.nonword_response = 'm'
	else:
		var.word_response = 'm'
		var.nonword_response = 'z'
	__end__

define pygaze_drift_correct drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define sketchpad end_of_practice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The practice phase is finished<br />The real experiment will start now<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad error_indicator
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=red penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=red penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run about_this_example always
	run setup_tracker always
	run counterbalance always
	run instructions always
	run practice_block always
	run end_of_practice always
	run experimental_block always
	run goodbye always

define loop experimental_block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run experimental_block_sequence

define sequence experimental_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run drift_correct always
	run reset_feedback always
	run experimental_stimuli always

define loop experimental_stimuli
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "[word_response]"
	setcycle 0 category word
	setcycle 0 target monkey
	setcycle 1 correct_response "[nonword_response]"
	setcycle 1 category nonword
	setcycle 1 target munkey
	setcycle 2 correct_response "[word_response]"
	setcycle 2 category word
	setcycle 2 target fox
	setcycle 3 correct_response "[nonword_response]"
	setcycle 3 category nonword
	setcycle 3 target bix
	setcycle 4 correct_response "[word_response]"
	setcycle 4 category word
	setcycle 4 target artificial
	setcycle 5 correct_response "[nonword_response]"
	setcycle 5 category nonword
	setcycle 5 target artifacial
	run trial_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="End of block [=var.count_block_sequence+1]<br /><br />Your average response time was [avg_rt] ms<br />Your accuracy was [acc] %<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad fixation
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The experiment is finished<br />Thank you for participating<br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Instructions<br /><br /><br />You will see strings of letters<br />Your task is to say whether these letters form a word or not<br /><br />If the letters form a word, press [word_response]<br />If the letters do not form a word, press [nonword_response]<br /><br />Examples<br /><br /><span style='mono'>apple</span> is a word, so you press [word_response]<br /><span style='mono'>ipple</span> is not a word, so you press [nonword_response]<br /><br /><br />Press a key to start practice" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define pygaze_log log_eye_data_to_edf_file
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define logger log_variables_to_csv_file
	set description "Logs experimental data"
	set auto_log yes

define loop practice_block
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run practice_block_sequence

define sequence practice_block_sequence
	set flush_keyboard yes
	set description "A sequence containging a single block of trials followed by feedback to the participant"
	run drift_correct always
	run reset_feedback always
	run practice_stimuli always
	run feedback always

define loop practice_stimuli
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 6
	set continuous no
	set column_order "correct_response;target;category"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "[word_response]"
	setcycle 0 category word
	setcycle 0 target apple
	setcycle 1 correct_response "[nonword_response]"
	setcycle 1 category nonword
	setcycle 1 target ipple
	setcycle 2 correct_response "[word_response]"
	setcycle 2 category word
	setcycle 2 target turtle
	setcycle 3 correct_response "[nonword_response]"
	setcycle 3 category nonword
	setcycle 3 target ourtel
	setcycle 4 correct_response "[word_response]"
	setcycle 4 category word
	setcycle 4 target magic
	setcycle 5 correct_response "[nonword_response]"
	setcycle 5 category nonword
	setcycle 5 target mocag
	run trial_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define pygaze_init setup_tracker
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define pygaze_start_recording start_recording_eye_movements
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording stop_recording_eye_movements
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run start_recording_eye_movements always
	run fixation always
	run word always
	run keyboard_response always
	run error_indicator "[correct] = 0"
	run correct_indicator "[correct] = 1"
	run log_variables_to_csv_file always
	run log_eye_data_to_edf_file always
	run stop_recording_eye_movements always

define sketchpad word
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[target]" x=0 y=0 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

