---
API: 2
OpenSesame: 3.1.7
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Demo - how to collect RT"
set subject_parity even
set subject_nr 0
set start experiment_sequence
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/matt/repos/opensesame-workshop/experiments"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define keyboard_response collect_RT
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9"

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run show_information always
	run show_blank_sscreen always
	run trial_loop always

define logger log_the_results
	set description "Logs experimental data"
	set auto_log yes

define sketchpad show_blank_sscreen
	set duration 50
	set description "Displays stimuli"

define form_text_display show_information
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "This expt shows how to collect a response while a stimulus is on screen and have the stimulus display be response-terminated. Show the stim for 0 ms and follow it with the kb response. The screen isn't overwritten until the next display."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad show_stimulus
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="S1.JPG" scale=1 show_if=always x=0.0 y=0.0 z_index=0

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run show_blank_sscreen always
	run show_stimulus always
	run collect_RT always
	run show_blank_sscreen always
	run log_the_results always

