---
API: 2.1
OpenSesame: 3.2.8
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title "Website Viewing"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 968
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/matt/Desktop/gits/opensesame_examples"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define keyboard_response WaitForEnter
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "return;enter"

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions always
	run new_pygaze_drift_correct always
	run trial_loop always

define form_consent consent_form
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Consent form</span>"
	__form_text__
	You are about to participate in an experiment.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run notes_to_self always
	run consent_form always
	run hide_cursor always
	run new_pygaze_init always
	run sayHello always
	run WaitForEnter always
	run main_sequence always
	run sayGoodbye always

define inline_script hide_cursor
	set description "Executes Python code"
	___run__
	my_mouse = mouse()
	my_mouse.show_cursor(show=False)
	__end__
	set _prepare ""

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=27 html=yes show_if=always text="You will now be presented with a screenshot of a website that you must rate for trustworthiness. <br /><br />You may view the website for as long as you like: when you are ready to rate it, press any number key between 1 and 9, where 1 means completely untrustworthy and 9 means completely trustworthy, and you can use any number in between. <br /><br />Press ENTER to continue" x=0 y=0 z_index=0

define keyboard_response keyboard_rating
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9"

define logger logData
	set description "Logs experimental data"
	set auto_log yes

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop always

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init new_pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define notepad notes_to_self
	__note__
	Stuff you write here doesn't get displayed during the experiment.
	
	It is a good place to write notes for colleagues or students to whom you are sending an experiment for them to run, for example.
	
	While you are still writing an experiment, it is a good place to write todo's etc
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sketchpad sayGoodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Thank you for completing <br />the experiment. Press any key to exit." x=0 y=0 z_index=0

define sketchpad sayHello
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Welcome to the website viewing experiment. <br /><br />Press ENTER to continue" x=0 y=0 z_index=0

define inline_script send_image_to_host_and_edf
	set description "Executes Python code"
	set _run "exp.pygaze_eyetracker.log('!V IMGLOAD FILL %s' % self.get('website'))"
	set _prepare ""

define inline_script send_independent_variables_to_edf
	set description "Executes Python code"
	___run__
	exp.pygaze_eyetracker.log('!V TRIAL_VAR condition %s' % self.get('condition'))
	exp.pygaze_eyetracker.log('!V TRIAL_VAR website %s' % self.get('website'))
	__end__
	set _prepare ""

define inline_script send_rating_to_edf
	set description "Executes Python code"
	___run__
	exp.pygaze_eyetracker.log('!V TRIAL_VAR response_keyboard_rating %s' % self.get('response_keyboard_rating'))
	__end__
	set _prepare ""

define sketchpad show_website
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[website]" scale=1 show_if=always x=0 y=0 z_index=0

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition 1
	setcycle 0 website "facebook.png"
	setcycle 1 condition 1
	setcycle 1 website "instagram.png"
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pygaze_start_recording always
	run send_independent_variables_to_edf always
	run send_image_to_host_and_edf always
	run show_website always
	run keyboard_rating always
	run send_rating_to_edf always
	run logData always
	run pygaze_log always
	run pygaze_stop_recording always

